#This model is inferred from kholodenko model (biomodel)
begin model
begin parameters
  r1_k1f   0.003
  r1_k1b   0.06
  r2_k2f   0.01
  r2_k2b   0.1
  r3_k3f   1.0
  r3_k3b   0.01
  r4_V4    450.0
  r4_K4    50.0
  r13_k13f 0.09
  r13_k13b 0.6
  r14_k14f 6.0
  r14_k14b 0.06
  r15_k15f 0.3
  r15_k15b 0.0009
  r16_V16  1.7
  r16_K16  340.0
end parameters

begin seed species
  EGF()       680 #nM
  EGFR()      100.0 #nM
  Shc()       150.0 #nM
end seed species

begin observables
  #Molecules EGF EGF()
  #Molecules EGFR EGFR()
  #Molecules Shc Shc()
  Molecules Dimers R2(),R2()
  Species EGF_EGFR2_P     RP()    #RP in Kholodenko's paper
  Species Shc_P           ShP()   #ShP in Kholodenko's paper
  Molecules EGFRPtotal    RP(),RP(),R_Sh(),R_Sh(),R_ShP(),R_ShP()                    
  Molecules ShPtotal      ShP(),R_ShP() 
end observables   

begin functions                                              
  fRate3() = r4_V4 /(EGF_EGFR2_P +r4_K4)
  fRate15() = r16_V16 /(Shc_P+r16_K16)
end functions

begin reaction rules
  # Ligand binding
  v1:  EGF() + EGFR() <-> Ra() r1_k1f,r1_k1b
  # Dimerization
  v2:  Ra() + Ra() <-> R2() 2*r2_k2f,r2_k2b
  # # Phosphorylation
  # v3:  R2() <-> RP() r3_k3f,r3_k3b
  # v4:  RP() -> R2() fRate3
  # v13: Shc() + RP() <-> R_Sh() r13_k13f,r13_k13b
  # v14: R_Sh() <-> R_ShP() r14_k14f,r14_k14b
  # v15: R_ShP() <-> RP() + ShP() r15_k15f,r15_k15b
  # v16: ShP() -> Shc() fRate15
end reaction rules

end model

simulate({method=>"ode",t_end=>120,n_steps=>120})

