
#This model is inferred from kholodenko model (biomodel)
begin model
begin parameters
#EGF,EGFR Pramaters
  r1_k1f 0.003
  r1_k1b 0.06
  r2_k2f 0.01
  r2_k2b 0.1
  r3_k3f 1.0
  r3_k3b 0.01
  r4_V4 450.0
  r4_K4 50.0
  #Grb2, SOS Parameters
  r9_k9f 0.003
  r9_k9b 0.05
  r10_k10f 0.01
  r10_k10b 0.06
  r11_k11f 0.03
  r11_k11b 0.0045
  r12_k12f 0.0015
  r12_k12b 0.0001
 # Shc Parameters
  r13_k13f 0.09
  r13_k13b 0.6
  r14_k14f 6.0
  r14_k14b 0.06
  r15_k15f 0.3
  r15_k15b 0.0009
  r16_V16 1.7
  r16_K16 340.0
end parameters
begin molecule types
  EGF(egfr)
  EGFR(egf,egfr,p~P~0,shc,grb2)
  Shc(egfr,p~P~0)
  Grb2(egfr,sos)
  SOS(grb2)
end molecule types
begin seed species
  EGF(egfr) 680 #EGF 
  EGFR(egf,egfr,p~0,shc,grb2) 100.0 #EGFR
  Shc(egfr,p~0) 150.0 #Shc
  Grb2(egfr,sos) 85.0 #Grb2 
  SOS(grb2) 34.0 #SOS 
end seed species
begin observables
  Species EGF_EGFR2_P          EGFR(egfr,egf!1,p~P,shc,grb2).EGF(egfr!1)    #RP in Kholodenko's paper

  Species EGF_EGFR2_Grb2      EGFR(egfr,egf,grb2!1,p~0,shc).Grb2(egfr!1,sos) #R-G in Kholodenko's paper
  Species Shc_P                Shc(egfr,p~P) #ShP in Kholodenko's paper

  Molecules EGFRPtotal EGFR(egfr,egf!1,p~P,shc,grb2).EGF(egfr!1), EGFR(egfr,egf!1,p~P,shc,grb2).EGF(egfr!1), \
                       EGFR(egfr,egf!1,p~P,shc!2,grb2).Shc(egfr!2,p~0).EGF(egfr!1), EGFR(egfr,egf!1,p~P,shc!2,grb2).Shc(egfr!2,p~0).EGF(egfr!1), \
                       EGFR(egfr,egf!1,p~0,shc!2,grb2).Shc(egfr!2,p~P).EGF(egfr!1), EGFR(egfr,egf!1,p~0,shc!2,grb2).Shc(egfr!2,p~P).EGF(egfr!1), \
                       EGFR(egfr!1,egf,grb2,p~0,shc).EGFR(egfr!1,egf,grb2!2,p~0,shc).Grb2(egfr!2,sos!3).SOS(grb2!3), EGFR(egfr!1,egf,grb2,p~0,shc).EGFR(egfr!1,egf,grb2!2,p~0,shc).Grb2(egfr!2,sos!3).SOS(grb2!3)\
                       EGFR(egfr,egf,grb2!1,p~0,shc).Grb2(egfr!1,sos), EGFR(egfr,egf,grb2!1,p~0,shc).Grb2(egfr!1,sos), 
 
  Molecules ShPtotal   EGFR(egfr,egf!1,p~P,shc!2,grb2).Shc(egfr!2,p~P).EGF(egfr!1), \
                       Shc(egfr,p~P), 

  Molecules Grb2EGFRtotal EGFR(egfr,egf,grb2!1,p~0,shc).Grb2(egfr!1,sos), \
                          EGFR(egfr!1,egf,grb2,p~0,shc).EGFR(egfr!1,egf,grb2!2,p~0,shc).Grb2(egfr!2,sos!3).SOS(grb2!3),

end observables                       
begin functions                                              
  fRate3() = r4_V4 /(EGF_EGFR2_P +r4_K4)
  fRate15() = r16_V16 /(Shc_P+r16_K16)
end functions

begin reaction rules
  v1: EGFR(egfr,egf,p~0,shc,grb2) + EGF(egfr) <-> EGFR(egfr,egf!1,p~0,shc,grb2).EGF(egfr!1) r1_k1f,r1_k1b
  v2: EGFR(egfr,egf!1,p~0,shc,grb2).EGF(egfr!1) + EGFR(egfr,egf!1,p~0,shc,grb2).EGF(egfr!1) <-> EGFR(egfr!1,egf,p~0,shc,grb2).EGFR(egfr!1,egf,p~0,shc,grb2) r2_k2f,r2_k2b
  v3: EGFR(egfr!1,egf,p~0,shc,grb2).EGFR(egfr!1,egf,p~0,shc,grb2) <-> EGFR(egfr,egf!1,p~P,shc,grb2).EGF(egfr!1) r3_k3f,r3_k3b
  v4: EGFR(egfr,egf!1,p~P,shc,grb2).EGF(egfr!1) -> EGFR(egfr!1,egf,p~0,shc,grb2).EGFR(egfr!1,egf,p~0,shc,grb2) fRate3
  v9:  Grb2(egfr,sos) + EGFR(egfr,egf!1,grb2,p~P,shc).EGF(egfr!1) <-> EGFR(egfr,egf,grb2!1,p~0,shc).Grb2(egfr!1,sos) r9_k9f,r9_k9b
  v10: EGFR(egfr,egf,grb2!1,p~0,shc).Grb2(egfr!1,sos) + SOS(grb2) <-> EGFR(egfr!1,egf,grb2,p~0,shc).EGFR(egfr!1,egf,grb2!2,p~0,shc).Grb2(egfr!2,sos!3).SOS(grb2!3) r10_k10f,r10_k10b
  v11: EGFR(egfr!1,egf,grb2,p~0,shc).EGFR(egfr!1,egf,grb2!2,p~0,shc).Grb2(egfr!2,sos!3).SOS(grb2!3) <-> Grb2(egfr,sos!1).SOS(grb2!1) + EGFR(egfr,egf!1,grb2,p~P,shc).EGF(egfr!1) r11_k11f,r11_k11b
  v12: Grb2(egfr,sos!1).SOS(grb2!1) <-> Grb2(egfr,sos) + SOS(grb2) r12_k12f,r12_k12b
  v13: Shc(egfr,p~0) + EGFR(egfr,egf!1,p~P,shc,grb2).EGF(egfr!1) <-> EGFR(egfr,egf!1,p~P,shc!2,grb2).Shc(egfr!2,p~0).EGF(egfr!1) r13_k13f,r13_k13b
  v14: EGFR(egfr,egf!1,p~P,shc!2,grb2).Shc(egfr!2,p~0).EGF(egfr!1) <-> EGFR(egfr,egf!1,p~0,shc!2,grb2).Shc(egfr!2,p~P).EGF(egfr!1) r14_k14f,r14_k14b
  v15: EGFR(egfr,egf!1,p~0,shc!2,grb2).Shc(egfr!2,p~P).EGF(egfr!1) <-> EGFR(egfr,egf!1,p~P,shc,grb2).EGF(egfr!1) + Shc(egfr,p~P) r15_k15f,r15_k15b
  v16: Shc(egfr,p~P) -> Shc(egfr,p~0) fRate15
end reaction rules

end model

simulate({method=>"ode",t_end=>120,n_steps=>120})

