
#This model is inferred from kholodenko model (biomodel)
begin model
begin parameters
#EGF,EGFR Pramaters
  r1_k1f 0.003
  r1_k1b 0.06
  r2_k2f 0.01
  r2_k2b 0.1
  r3_k3f 1.0
  r3_k3b 0.01
  r4_V4 450.0
  r4_K4 50.0
  #PLCg
  r5_k5f 0.06
  r5_k5b 0.2
  r6_k6f 1.0
  r6_k6b 0.05
  r7_k7f 0.3
  r7_k7b 0.006
  r8_V8 1.0
  r8_K8 100.0
  r25_k25f 1.0
  r25_k25b 0.03
  #Grb2, SOS Parameters
  r9_k9f 0.003
  r9_k9b 0.05
  r10_k10f 0.01
  r10_k10b 0.06
  r11_k11f 0.03
  r11_k11b 0.0045
  r12_k12f 0.0015
  r12_k12b 0.0001
 # Shc Parameters
  r13_k13f 0.09
  r13_k13b 0.6
  r14_k14f 6.0
  r14_k14b 0.06
  r15_k15f 0.3
  r15_k15b 0.0009
  r16_V16 1.7
  r16_K16 340.0
  # Shc Grb2 SOS
  r17_k17f 0.003
  r17_k17b 0.1
  r18_k18f 0.3
  r18_k18b 0.0009
  r19_k19f 0.01
  r19_k19b 0.0214
  r20_k20f 0.12
  r20_k20b 0.00024
  r21_k21f 0.003
  r21_k21b 0.1
  r22_k22f 0.03
  r22_k22b 0.064
  r23_k23f 0.1
  r23_k23b 0.021
  r24_k24f 0.009
  r24_k24b 0.0429

end parameters
begin molecule types
  EGF(egfr)
  EGFR(egf,egfr,p~P~0,shc,grb2,plcg)
  Shc(egfr,p~P~0,grb2)
  Grb2(egfr,sos,shc)
  SOS(grb2)
  PLCg(egfr,p~P~0,p_i~P_I~0)
end molecule types

begin seed species
  EGF(egfr) 680 #EGF
  EGFR(egf,egfr,p~0,shc,grb2,plcg) 100.0 #EGFR #R
  Shc(egfr,p~0,grb2) 150.0 #Shc #Shc
  Grb2(egfr,sos,shc) 85.0 #Grb2 #Grb
  SOS(grb2) 34.0 #SOS #SOS
  PLCg(egfr,p~0,p_i~0) 105.0 #PLCg #PLCg  
end seed species

begin observables

  Species EGF_EGFR2_P          EGFR(egfr,egf!1,p~P,shc,grb2).EGF(egfr!1)    #RP in Kholodenko's paper

  Species PLCg_P              PLCg(egfr,p~P,p_i~0)    #PLP in Kholodenko's paper

  Species Shc_P                Shc(egfr,grb2,p~P) #ShP in Kholodenko's paper

  Molecules EGFRPtotal EGFR(egfr,egf!1,p~P,shc,grb2).EGF(egfr!1), EGFR(egfr,egf!1,p~P,shc,grb2).EGF(egfr!1), \
                       EGFR(egfr,egf!1,p~P,shc!2,grb2).Shc(egfr!2,p~0,grb2).EGF(egfr!1), EGFR(egfr,egf!1,p~P,shc!2,grb2).Shc(egfr!2,p~0,grb2).EGF(egfr!1), \
                       EGFR(egfr,egf!1,p~0,shc!2,grb2).Shc(egfr!2,p~P,grb2).EGF(egfr!1), EGFR(egfr,egf!1,p~0,shc!2,grb2).Shc(egfr!2,p~P,grb2).EGF(egfr!1), \
                       EGFR(egfr!1,egf,grb2,p~0,shc).EGFR(egfr!1,egf,grb2!2,p~0,shc).Grb2(egfr!2,sos!3,shc).SOS(grb2!3), EGFR(egfr!1,egf,grb2,p~0,shc).EGFR(egfr!1,egf,grb2!2,p~0,shc).Grb2(egfr!2,sos!3,shc).SOS(grb2!3), \
                       EGFR(egfr,egf,grb2!1,p~0,shc).Grb2(egfr!1,sos,shc), EGFR(egfr,egf,grb2!1,p~0,shc).Grb2(egfr!1,sos,shc), \ 
                       EGFR(egfr!1,egf,grb2,p~0,shc).EGFR(egfr!1,egf,grb2,p~0,shc!2).Grb2(egfr,shc!3,sos).Shc(egfr!2,grb2!3,p~0), EGFR(egfr!1,egf,grb2,p~0,shc).EGFR(egfr!1,egf,grb2,p~0,shc!2).Grb2(egfr,shc!3,sos).Shc(egfr!2,grb2!3,p~0), \
                       EGFR(egfr!1,egf,grb2,p~0,shc).EGFR(egfr!1,egf,grb2,p~0,shc!2).Grb2(egfr,shc!3,sos!4).Shc(egfr!2,grb2!3,p~0).SOS(grb2!4),EGFR(egfr!1,egf,grb2,p~0,shc).EGFR(egfr!1,egf,grb2,p~0,shc!2).Grb2(egfr,shc!3,sos!4).Shc(egfr!2,grb2!3,p~0).SOS(grb2!4), \                        
                       EGFR(egfr,egf,grb2,p~0,plcg!1,shc).PLCg(egfr!1,p~0,p_i~0), EGFR(egfr,egf,grb2,p~0,plcg!1,shc).PLCg(egfr!1,p~0,p_i~0),\
                       EGFR(egfr!1,egf,grb2,p~0,plcg,shc).EGFR(egfr!1,egf,grb2,p~0,plcg!2,shc).PLCg(egfr!2,p~P,p_i~0), EGFR(egfr!1,egf,grb2,p~0,plcg,shc).EGFR(egfr!1,egf,grb2,p~0,plcg!2,shc).PLCg(egfr!2,p~P,p_i~0),
 
  Molecules ShPtotal   EGFR(egfr,egf!1,p~P,shc!2,grb2).Shc(egfr!2,p~P,grb2).EGF(egfr!1), \
                       Shc(egfr,p~P,grb2), \
                       EGFR(egfr!1,egf,grb2,p~0,shc).EGFR(egfr!1,egf,grb2,p~0,shc!2).Grb2(egfr,shc!3,sos).Shc(egfr!2,grb2!3,p~0), \
                       EGFR(egfr!1,egf,grb2,p~0,shc).EGFR(egfr!1,egf,grb2,p~0,shc!2).Grb2(egfr,shc!3,sos!4).Shc(egfr!2,grb2!3,p~0).SOS(grb2!4), \
                       Shc(egfr,grb2!1,p~0).Grb2(egfr,shc!1,sos), \
                       Grb2(egfr,shc!1,sos!2).Shc(egfr,grb2!1,p~0).SOS(grb2!2),

  Molecules Grb2EGFRtotal EGFR(egfr,egf,grb2!1,p~0,shc).Grb2(egfr!1,sos,shc), \
                          EGFR(egfr!1,egf,grb2,p~0,shc).EGFR(egfr!1,egf,grb2!2,p~0,shc).Grb2(egfr!2,sos!3,shc).SOS(grb2!3), \
                          EGFR(egfr!1,egf,grb2,p~0,shc).EGFR(egfr!1,egf,grb2,p~0,shc!2).Grb2(egfr,shc!3,sos).Shc(egfr!2,grb2!3,p~0), \
                          EGFR(egfr!1,egf,grb2,p~0,shc).EGFR(egfr!1,egf,grb2,p~0,shc!2).Grb2(egfr,shc!3,sos!4).Shc(egfr!2,grb2!3,p~0).SOS(grb2!4), 

  Molecules Grb2Shctotal  EGFR(egfr!1,egf,grb2,p~0,shc).EGFR(egfr!1,egf,grb2,p~0,shc!2).Grb2(egfr,shc!3,sos).Shc(egfr!2,grb2!3,p~0), \
                          Shc(egfr,grb2!1,p~0).Grb2(egfr,shc!1,sos), \
                          EGFR(egfr!1,egf,grb2,p~0,shc).EGFR(egfr!1,egf,grb2,p~0,shc!2).Grb2(egfr,shc!3,sos!4).Shc(egfr!2,grb2!3,p~0).SOS(grb2!4), \
                          Grb2(egfr,shc!1,sos!2).Shc(egfr,grb2!1,p~0).SOS(grb2!2)

  Molecules PLCgPtotal PLCg(egfr,p~P,p_i~0), EGFR(egfr!1,egf,grb2,p~0,plcg,shc).EGFR(egfr!1,egf,grb2,p~0,plcg!2,shc).PLCg(egfr!2,p~P,p_i~0)
                  
end observables
begin functions                                              
  fRate3() = r4_V4 /(EGF_EGFR2_P +r4_K4)
  fRate7() = r8_V8/(PLCg_P +r8_K8)
  fRate15() = r16_V16 /(Shc_P+r16_K16)
end functions

begin reaction rules
  v1: EGFR(egfr,egf,p~0,shc,grb2,plcg) + EGF(egfr) <-> EGFR(egfr,egf!1,p~0,shc,grb2,plcg).EGF(egfr!1) r1_k1f,r1_k1b
  v2: EGFR(egfr,egf!1,p~0,shc,grb2,plcg).EGF(egfr!1) + EGFR(egfr,egf!1,p~0,shc,grb2,plcg).EGF(egfr!1) <-> EGFR(egfr!1,egf,p~0,shc,grb2,plcg).EGFR(egfr!1,egf,p~0,shc,grb2,plcg) r2_k2f,r2_k2b
  v3: EGFR(egfr!1,egf,p~0,shc,grb2,plcg).EGFR(egfr!1,egf,p~0,shc,grb2,plcg) <-> EGFR(egfr,egf!1,p~P,shc,grb2,plcg).EGF(egfr!1) r3_k3f,r3_k3b
  v4: EGFR(egfr,egf!1,p~P,shc,grb2,plcg).EGF(egfr!1) -> EGFR(egfr!1,egf,p~0,shc,grb2,plcg).EGFR(egfr!1,egf,p~0,shc,grb2,plcg) fRate3  
  v5: EGFR(egfr,egf!1,grb2,p~P,plcg,shc).EGF(egfr!1) + PLCg(egfr,p~0,p_i~0) <-> EGFR(egfr,egf,grb2,p~0,plcg!1,shc).PLCg(egfr!1,p~0,p_i~0) r5_k5f,r5_k5b
  v6: EGFR(egfr,egf,grb2,p~0,plcg!1,shc).PLCg(egfr!1,p~0,p_i~0) <-> EGFR(egfr!1,egf,grb2,p~0,plcg,shc).EGFR(egfr!1,egf,grb2,p~0,plcg!2,shc).PLCg(egfr!2,p~P,p_i~0) r6_k6f,r6_k6b
  v7: EGFR(egfr!1,egf,grb2,p~0,plcg,shc).EGFR(egfr!1,egf,grb2,p~0,plcg!2,shc).PLCg(egfr!2,p~P,p_i~0) <-> PLCg(egfr,p~P,p_i~0) + EGFR(egfr,egf!1,grb2,p~P,plcg,shc).EGF(egfr!1) r7_k7f,r7_k7b
  v8: PLCg(egfr,p~P,p_i~0) -> PLCg(egfr,p~0,p_i~0) fRate7
  v9:  Grb2(egfr,sos,shc) + EGFR(egfr,egf!1,grb2,p~P,shc,plcg).EGF(egfr!1) <-> EGFR(egfr,egf,grb2!1,p~0,shc,plcg).Grb2(egfr!1,sos,shc) r9_k9f,r9_k9b
  v10: EGFR(egfr,egf,grb2!1,p~0,shc,plcg).Grb2(egfr!1,sos,shc) + SOS(grb2) <-> EGFR(egfr!1,egf,grb2,p~0,shc,plcg).EGFR(egfr!1,egf,grb2!2,p~0,shc,plcg).Grb2(egfr!2,sos!3,shc).SOS(grb2!3) r10_k10f,r10_k10b
  v11: EGFR(egfr!1,egf,grb2,p~0,shc,plcg).EGFR(egfr!1,egf,grb2!2,p~0,shc,plcg).Grb2(egfr!2,sos!3,shc).SOS(grb2!3) <-> Grb2(egfr,sos!1,shc).SOS(grb2!1) + EGFR(egfr,egf!1,grb2,p~P,shc,plcg).EGF(egfr!1) r11_k11f,r11_k11b
  v12: Grb2(egfr,sos!1,shc).SOS(grb2!1) <-> Grb2(egfr,sos,shc) + SOS(grb2) r12_k12f,r12_k12b
  v13: Shc(egfr,p~0,grb2) + EGFR(egfr,egf!1,p~P,shc,grb2,plcg).EGF(egfr!1) <-> EGFR(egfr,egf!1,p~P,shc!2,grb2,plcg).Shc(egfr!2,p~0,grb2).EGF(egfr!1) r13_k13f,r13_k13b
  v14: EGFR(egfr,egf!1,p~P,shc!2,grb2,plcg).Shc(egfr!2,p~0,grb2).EGF(egfr!1) <-> EGFR(egfr,egf!1,p~0,shc!2,grb2,plcg).Shc(egfr!2,p~P,grb2).EGF(egfr!1) r14_k14f,r14_k14b
  v15: EGFR(egfr,egf!1,p~0,shc!2,grb2,plcg).Shc(egfr!2,p~P,grb2).EGF(egfr!1) <-> EGFR(egfr,egf!1,p~P,shc,grb2,plcg).EGF(egfr!1) + Shc(egfr,p~P,grb2) r15_k15f,r15_k15b
  v16: Shc(egfr,p~P,grb2) -> Shc(egfr,p~0,grb2) fRate15
  v17: EGFR(egfr,egf!1,grb2,p~0,shc!2,plcg).Shc(egfr!2,grb2,p~P).EGF(egfr!1) + Grb2(egfr,shc,sos) <-> EGFR(egfr!1,egf,grb2,p~0,shc,plcg).EGFR(egfr!1,egf,grb2,p~0,shc!2,plcg).Grb2(egfr,shc!3,sos).Shc(egfr!2,grb2!3,p~0) r17_k17f,r17_k17b
  v18: EGFR(egfr!1,egf,grb2,p~0,shc,plcg).EGFR(egfr!1,egf,grb2,p~0,shc!2,plcg).Grb2(egfr,shc!3,sos).Shc(egfr!2,grb2!3,p~0) <-> Shc(egfr,grb2!1,p~0).Grb2(egfr,shc!1,sos) + EGFR(egfr,egf!1,grb2,p~P,shc,plcg).EGF(egfr!1) r18_k18f,r18_k18b
  v19: SOS(grb2) + EGFR(egfr!1,egf,grb2,p~0,shc,plcg).EGFR(egfr!1,egf,grb2,p~0,shc!2,plcg).Grb2(egfr,shc!3,sos).Shc(egfr!2,grb2!3,p~0) <-> EGFR(egfr!1,egf,grb2,p~0,shc,plcg).EGFR(egfr!1,egf,grb2,p~0,shc!2,plcg).Grb2(egfr,shc!3,sos!4).Shc(egfr!2,grb2!3,p~0).SOS(grb2!4) r19_k19f,r19_k19b
  v20: EGFR(egfr!1,egf,grb2,p~0,shc,plcg).EGFR(egfr!1,egf,grb2,p~0,shc!2,plcg).Grb2(egfr,shc!3,sos!4).Shc(egfr!2,grb2!3,p~0).SOS(grb2!4) <-> Grb2(egfr,shc!1,sos!2).Shc(egfr,grb2!1,p~0).SOS(grb2!2) + EGFR(egfr,egf!1,grb2,p~P,shc,plcg).EGF(egfr!1) r20_k20f,r20_k20b
  v21: Grb2(egfr,shc,sos) + Shc(egfr,grb2,p~P) <-> Shc(egfr,grb2!1,p~0).Grb2(egfr,shc!1,sos) r21_k21f,r21_k21b
  v22: Shc(egfr,grb2!1,p~0).Grb2(egfr,shc!1,sos) + SOS(grb2) <-> Grb2(egfr,shc!1,sos!2).Shc(egfr,grb2!1,p~0).SOS(grb2!2) r22_k22f,r22_k22b
  v23: Grb2(egfr,shc!1,sos!2).Shc(egfr,grb2!1,p~0).SOS(grb2!2) <-> Grb2(egfr,shc,sos!1).SOS(grb2!1) + Shc(egfr,grb2,p~P) r23_k23f,r23_k23b
  v24: EGFR(egfr,egf!1,grb2,p~0,shc!2,plcg).Shc(egfr!2,grb2,p~P).EGF(egfr!1) + Grb2(egfr,shc,sos!1).SOS(grb2!1) <-> EGFR(egfr!1,egf,grb2,p~0,shc,plcg).EGFR(egfr!1,egf,grb2,p~0,shc!2,plcg).Grb2(egfr,shc!3,sos!4).Shc(egfr!2,grb2!3,p~0).SOS(grb2!4) r24_k24f,r24_k24b
  v25: PLCg(egfr,p~P,p_i~0) <-> PLCg(egfr,p~0,p_i~P_I) r25_k25f,r25_k25b
end reaction rules

end model

simulate({method=>"ode",t_end=>120,n_steps=>120})

