
#This model is the energy-based model of the kholodenko model 1999
begin model
begin parameters
  #Optimized parameters to recover Kholodenko's output
  #EGF,EGFR Parameters 
  r3_k3f   0.43   #1/s
  r3_k3b   1.21   #1/s
  r4_V4    22.74  #nM/s
  r4_K4    0.49   #nM
  # Shc Parameters
  r14_k14f 0.18    #1/s
  r14_k14b 0.001   #1/s
  r16_V16  0.45    #nM/s
  r16_K16  0.001   #nM
  #Free Energies, J/nM
  Gf_LR    -4.21
  Gf_RR    -1.86
  Gf_RSh   -3.28
  #Cooperative terms
  Gf_LRR   1.25 
  Gf_LRRL  1.03
  Gf_RShP  10    
  #rate distribution parameter, no units
  phi      0.9
  #Activation Energies), J/nM
  Ea_LR    10
  Ea_RR    3.72
  Ea_RSh   2.07
end parameters

begin molecule types
  EGF(egfr)
  EGFR(egf,egfr,shc~0~P)
  Shc(egfr,grb2~0~P)
end molecule types

begin seed species
  EGF(egfr)                    680    #nM
  EGFR(egf,egfr,shc~0)         100.0  #nM
  Shc(egfr,grb2~0)             150.0  #nM
end seed species

begin energy patterns
  EGFR(egf!0).EGF(egfr!0)                                        Gf_LR
  EGFR(egfr!1).EGFR(egfr!1)                                      Gf_RR+ 2*Gf_LRR + Gf_LRRL
  EGFR(shc~P!2).Shc(egfr!2)                                      Gf_RSh
  EGFR(shc~P!2).Shc(egfr!2,grb2~P)                               Gf_RShP
end energy patterns

begin observables
  Molecules Dimers          EGFR(egfr!+)
  Species   EGF_EGFR2_P     EGFR(shc~P)        #RP in Kholodenko's paper
  Species   Shc_P           Shc(egfr,grb2~P!?) #ShP in Kholodenko's paper
  Molecules EGFRPtotal      EGFR(shc~P!?)
  Molecules ShPtotal        Shc(grb2~P!?) 
end observables                   

begin functions                                              
  fRate3()  = r4_V4 /(EGF_EGFR2_P +r4_K4)
  fRate15() = r16_V16 /(Shc_P+r16_K16)
end functions

begin reaction rules
    # Ligand-receptor binding 
  v1: EGFR(egfr,egf,shc) + EGF(egfr) <-> EGFR(egfr,egf!1,shc).EGF(egfr!1) Arrhenius(phi,Ea_LR) 
    # Receptor-aggregation (JIM: This rule is restrictive because only unphosphorylated receptors can undimerize.)
  v2: EGFR(egfr,egf!+,shc~0) + EGFR(egfr,egf!+,shc~0) <-> EGFR(egfr!1,egf!+,shc~0).EGFR(egfr!1,egf!+,shc~0) Arrhenius(phi,Ea_RR)
    # Transphosphorylation of Egfr in dimer (bound at egfr)
  v3: EGFR(egfr!+,shc~0) -> EGFR(egfr!+,shc~P) r3_k3f
    # Dephosphorylation by phosphotase (probably don't need both rates)
  v4: EGFR(shc~P) -> EGFR(shc~0) (r3_k3b + fRate3)
    # Egfr + Shc (note that this covers the binding of both Shc(p~0) and Shc(p~P))
  v13: Shc(egfr) + EGFR(shc~P) <-> EGFR(shc~P!1).Shc(egfr!1) Arrhenius(phi,Ea_RSh) 
    # Shc transphos
  v14: EGFR(egfr!+,shc~P!1).Shc(egfr!1,grb2~0) -> EGFR(egfr!+,shc~P!1).Shc(egfr!1,grb2~P)  r14_k14f
    # Dephosphorylayion of Shc by phosphotase (may not need both rates)
  v16: Shc(egfr,grb2~P) -> Shc(egfr,grb2~0) (r14_k14b + fRate15)
end reaction rules

end model

generate_network({overwrite=>1})
simulate({method=>"ode",t_end=>120,n_steps=>1200})



